CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Frame "0")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "2")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):100,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DNA
    Number of pixels by which to expand the primary objects:500
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:GFP
    Name the primary objects to be identified:GFP_spots
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:5
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
RelateObjects:[module_num:8|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
    Parent objects:Cells
    Child objects:GFP_spots
    Name the output object:Cells_gfp
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:9|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
    Parent objects:Nuclei
    Child objects:GFP_spots
    Name the output object:Nuclei_gfp
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Children_GFP_spots_Count,Cells|Children_GFP_spots_Count,GFP_spots|Distance_Centroid_Nuclei,GFP_spots|Distance_Centroid_Cells,GFP_spots|Parent_Nuclei,GFP_spots|Parent_Cells
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:GFP_spots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
